PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'NativeLanguage': u'American English', u'Age': u'', u'participant': u'1', u'OtherLanguages': u'', u'Gender': u'F'}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = VSH_Exp2
  Screen = 1
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Routines
  Routine instr
    TextComponent text
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Thanks for your participation in this experiment.

        In this experiment, you will learn the basics of a new language. You will be exposed to different words in this language.

        To facilitate your learning of the basic words in this language, please mouth (silently) each word after you hear it.

        After being exposed to some words in the language, you will be tested on what you have learned about the language.
    TextComponent text_2
      text = Press the SPACEBAR to begin.
      pos = [0, -0.7]
      startVal [time (s)] = 8
      letterHeight = 0.05
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    KeyboardComponent SpaceBar
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 8
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  Routine trial2
    TextComponent text_7
      wrapWidth = 1.8
      text = Is this a possible word in the language you just learned?
      stopVal [duration (s)] = 10
      pos = [0, 0.7]
      startVal [time (s)] = 1
      letterHeight = 0.05
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    SoundComponent sound_2
      sound [set every repeat] = $SOUND
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
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    TextComponent text_6
      text [set every repeat] = $STIMULUS
      stopVal [duration (s)] = 1
      pos = [0, 0.15]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    RatingScaleComponent rating
      pos = 0, -0.4
      high = 2
      startVal [time (s)] = 1
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [duration (s)] = 10
      categoryChoices = Yes, No
      singleClick = True
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    CodeComponent code_2
      Each Frame:
        soundtime2=sound_2.getDuration()
        if t > (soundtime2+1):
         sound_2.stop()
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    SoundComponent sound_1
      sound [set every repeat] = $SOUND
      stopVal [duration (s)] = 10
      startVal [time (s)] = 1
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    TextComponent text_3
      text [set every repeat] = $STIMULUS
      stopVal [duration (s)] = 1
      startVal [time (s)] = 1
      letterHeight = 0.1
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    CodeComponent code
      Each Frame:
        soundtime1=sound_1.getDuration()
        if t > (soundtime1+1):
         sound_1.stop()
    TextComponent text_8
      text = Silently mouth the following word
      stopVal [duration (s)] = 2.0
      pos = [0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine instr2
    TextComponent text_4
      wrapWidth = 1.5
      startVal [time (s)] = 1
      letterHeight = 0.08
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      text:
        Now that you have learned some basics of this new language, it is time to test what you have learned.

        Your job is to indicate whether the words you hear are possible words in the language that you just learned.

        If the word is a possible word in the language that you learned, choose "Yes".

        If the word is NOT a possible word in the language that you learned, choose "No".
    TextComponent text_5
      text = Press the SPACEBAR to continue.
      pos = [0, -0.7]
      startVal [time (s)] = 8
      letterHeight = 0.05
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 8
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  Routine Thanks
    TextComponent text_9
      wrapWidth = 1.6
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thanks for particpating in the experiment!

        Please wait for further instructions from the experimenter.
  Routine Email
    CodeComponent code_3
      Begin Routine:
        import smtplib

        #forces the saving of the csv file
        thisExp.saveAsWideText(filename+".csv",delim=',') # saves the csv file

        # Read a file
        fo = open(filename+'.csv')
        filecontent = fo.read()

        sender = 'phonogroupexperiments@gmail.com'
        receiver = 'phonogroupexperiments@gmail.com'

        msg = """Content-Disposition: attachment; filename=%s.csv
        %s
        """ %(filename,filecontent)


        # Gmail Login

        username = 'phonogroupexperiments'
        password = 'PhonoGroup123'

        # Sending the mail

        server = smtplib.SMTP('smtp.gmail.com:587')
        server.starttls()
        server.login(username,password)
        server.sendmail(sender, receiver, msg)
        server.quit()
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $('vsh_exp3_stimuli/TrainingStimuli_Exp3_List'+str(expInfo['participant'])+'.csv') 
    loopType = random
    nReps = 2
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    Routine trial
  LoopTerminator trials
  Routine instr2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $('vsh_exp3_stimuli/TestStimuli_Exp3_List'+str(expInfo['participant'])+'.csv')
    loopType = random
    nReps = 1
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    Routine trial2
  LoopTerminator trials_2
  Routine Thanks
  Routine Email
